'Authors: Paolo Tecchio and Tobias Weingarten'

'GLOBAL VARIABLE DECLARATIONS*****************************************************
'View handles
var mainVH% := 0; 'FileOpen("D:\\PhD_Data\\Study_1\\TA_PreLoad_rFE\\AH\All.smrx",0, 3);
var xyVH% ; 'ViewFind("XY11");
var drawView% := 0;                                              				'Result view for drawing ramp
var gridVH%; 'Grid view for error tollerance check within desired time window
var showGridVH% := 0; 'bool to check whether or not showing output

'XY-View channels and duration
var lrampCH%, urampCH%, fdbckCH%;
var repXYcycle% := 1; 'repetitive contractions on XY view
var allXY%;
var n% := 1; 'var for IDLE for checking how many repetition of tge XY ramp'

'VARS to pass to the SEQUENCER '
var TP_Isomed[2] := {4, 10};
var Stim_Set[3] := {5,6,50}; 'beginning, end, frequency of the stimulation
var n_Stim% := 50;
var StimP_set[5] := {1,5,0,0,0};

'Temporary trash variables for multiple functions
var x%, throaway%;
var startramp := -100;    'so that maxtime is always greater than startramp unless changed by GetXYData()

'XY-Ramp setting initialisation
var xywidth := 15;
var fdbkdata% := 1;    'the channel data that should be given to biofeedback
var fdbkdataX% := 0;    'the X axis for the biofeedback
var fdbkoffset := 0;    'delay of biofeedbackchannel, usually used when moving average filters are applied
var allowedoffset := 0.1;    'allowed offset for biofeedback e.g. 0.05 = 5%
var genxy[16] :=    {0, 0, 3, 0, 5, 1, 8, 1, 10, 0.7, 12, 0.5, 15, 0, 17, 0};    'general ramp that will be given to xy view, taken from r1 or r2
var r1[16] :=       {0, 0, 3, 0, 5, 1, 8, 1, 10, 0.7, 12, 0.5, 15, 0, 17, 0};    'ramp memory vector with 16 elements alternating time and corresponding value
var r2[16] :=       {0, 0, 3, 0, 5, 10, 8, 1, 10, 0.7, 12, 0.5, 15, 0, 17, 0};
var X_Lim[2];   'var for X range limits in XY in case X fdb is not time but another channel
var rampmax := Max(genxy[1], genxy[3], genxy[5], genxy[7], genxy[9], genxy[11], genxy[13], genxy[15]);    'for ramp range offset and for x and y range
var rampmin := Min(genxy[1], genxy[3], genxy[5], genxy[7], genxy[9], genxy[11], genxy[13], genxy[15]);
var range := rampmax * allowedoffset;
var game_mode% := 0;
var factor := 1;    'scaling factor in percentage
var rampnumber%;    'to distinguish between ramp1, ramp2 and so on (currently only two ramps, ramp 3 as curve ramp, ramp 4 import array, ramp5 MVC, ramp6 hand draw)

'View options
'var mv%, xyv%; ' mvcv%; MVC are now integrated in the xy view
'var winwidth% := 70;
var time_pts_err[2] := {4.5, 6.5}; 'time points analysis window XY ramp fdbch vs ideal ramp

'Equipment Check variables
var uscheck%, DAC1_TTL% := 1, tappercheck%, motioncapcheck%, isomedcheck%, isomedcheck2%, shorttap%, savetrue% := 1,  Stim%, StimP%;
var samplekey$ := "n"; 'select samplekey based on selected variables from above for the sequencer
var idlesave% := 0;
var USdelay% := 1; 'global var to define the delay between snippet and the start of XY ramp and the after the end of the XY ramp.
'When US is framline trigger 1s delay is fine, but when the CMD app is used it takes about 2 seconds before running and stopping
'Analysis options '
var listAnalysis$[7] := {"Nothing","Peak2Peak","Area","Mean","Max","Min","SD"};
var which% := 0;
'NameFile variable for prompt and send the command to SaveEco.exe and saving automatically the US data and the mat file
var  NameFiles$;
var mat_ch_proc[21][1][2]; 'init the global 3D matrix and then resize & reset values inisde the function. Used for saving channel processes

'var to store file imported (txt) for designed a personalized ramp
var fh%;
var storeImp[30000]; 'variable temp for storing data ramp display of ramp2(from snippet)
var Import_rampX[1], Import_rampY[1], Import_rampY_scale[1]; 'just one element as it will resize based on the points imported from the TXT to plot
'variable for drawing vertical dashed line'
var vline[2] := {0, 0};
var vertLine%, vertLine2%;

'VARS FOR MAKING A FANCY MVC XY WINDOW
var checkMVC% := 0;
var minMVC := 0;
var maxMVC := 0;
var llrampCH%, uurampCH%; 'just XY chan for MVC in the two directions'

'******************************************************'Draw ramp based on waveplay window and then plot it in the XY
var pWaveInt;                                           				'Sample interval (1/rate)
var pWaveRate := 200;                                  				    'Points resolution for drawing
var pWavePts%;                                          				'Number of data points
var oldX%;                                              				'Previous mouse position (for interpolation)
var oldY;
var outMax := 5;														'DAC full scale value
var outZero := 0;                                                       'DAC zero value
var TraceToPlot[1];                                                     'initialize to 1 and then resize according to the length
'THE SCRIPT STARTS HERE BY CHECKING THE SPIKE VERSION AND INITIALIZING TOOLBAR
'SET FILE PATH AND CREATE TOOLBAR**************************************************
if App(-1)<1001 then Message("This script needs at least Spike2 version 10"); halt endif;	'Checks for the latest version of Spike2
FilePathSet("", 0, "Where do you want to save everything?");

DoToolbar();

'CREATE THE TOOLBAR****************************************************************
Proc DoToolbar()
    ToolbarClear();
    ToolbarSet(0, "", Idle%);

    ToolbarSet(26,"Active Tor. Ch.", FitPassiveTorque%);
    ToolbarSet(25, "Draw Trace",MakeWave%);
    ToolbarSet(22, "Start Sampling", New%);
    ToolbarSet(20, "Main view", ChangeView%);
    ToolbarSet(19, "Rep XY/Seq Config", RepXY%);
    ToolbarSet(18, "XY-Ramp", XYRampSettings%);
    ToolbarSet(15, "XY-Err", SetErrorWin%);

    ToolbarSet(13, "MVC Opts", setMVC%);
    ToolbarSet(10, "Equipment Options", SetEquipment%);
    ToolbarSet(11, "Analysis Options",SetAnalysisOpts%);
    ToolbarSet(9, "Snippet", Snippet%);
    ToolbarSet(8, "Stop Snippet", StopSnippet%);
    ToolbarSet(7, "DAC1 TAP", DAC1tap%);

    ToolbarSet(6, "Un/Freeze US", TapUS%);
    ToolbarSet(5, "Start US", USStart%);
    ToolbarSet(4, "Move IsoMed", Isomed%);

    ToolbarSet(3, "StopSampling", StopSampling%);
    ToolbarSet(2, "SaveEverything", SaveData%);
    ToolbarSet(-1, "Quit");
    DisplayButtons();
    Toolbar("Collect some awesome data!!!",231);
end;


'DISABLE OR ENABLE TOOLBAR BUTTONS*************************************************
Proc DisplayButtons()
    docase
    case mainVH% <= 0 then
        ToolbarEnable(1, 0);
        ToolbarEnable(2, 0);
        ToolbarEnable(3, 0);
        ToolbarEnable(4, 0);
        ToolbarEnable(5, 0);
        ToolbarEnable(6, 0);
        ToolbarEnable(7, 0);
        ToolbarEnable(8, 0);
        ToolbarEnable(9,  0);
        ToolbarEnable(10, 0);
        ToolbarEnable(11, 0);
        ToolbarEnable(13, 1);
        ToolbarEnable(15, 1);
        ToolbarEnable(18, 1);
        ToolbarEnable(19, 0);
        ToolbarEnable(20, 0);
        ToolbarEnable(25, 0);
        ToolbarEnable(26, 0);

    case mainVH% >= 0 then
        ToolbarEnable(1, 0);
        ToolbarEnable(2, 1);
        ToolbarEnable(3, 1);
        ToolbarEnable(4, 1);
        ToolbarEnable(5, 1);
        ToolbarEnable(6, 1);
        ToolbarEnable(7, 1);
        ToolbarEnable(8, 1);
        ToolbarEnable(9, 1);
        ToolbarEnable(10, 1);
        ToolbarEnable(11, 1);
        ToolbarEnable(13, 1);
        ToolbarEnable(15, 1);
        ToolbarEnable(18, 1);
        ToolbarEnable(19, 1);
        ToolbarEnable(20, 1);
        ToolbarEnable(22, 0);
        ToolbarEnable(25, 1);
        ToolbarEnable(26, 1);

    endcase;
end;


'IDLE FUNCTION*********************************************************************
var relativetime, lastdata, lastdataX;    'global variables but specific to IDLE, not inside idle to not repeatedly being created
var resetT; 'global var to calculate the relative time related to the XY view
var currentT; 'var to get last time value'
Func Idle%() 'idle works at a frequency of 330Hz on the 1401 power3'
    View(mainVH%);    'select main view so that maxtime can be read in the following if-condition

    if MaxTime() < startramp + allXY% and mainVH% > 0 then    'startramp is the maximum time at ramp initialisation <-- GetXYData()
        currentT := MaxTime();' use current T for all next instructions as it is more correct and the same for each process'
        relativetime := currentT - startramp;
        lastdata := ChanValue(fdbkdata%, currentT-fdbkoffset);
        lastdataX := ChanValue(fdbkdataX%, currentT-fdbkoffset);'Read X feedbackd last data
        resetT := relativetime -(n%-1)*xywidth;
        View(xyVH%);
        if xyVH% > 0 then
            if (fdbkdataX% = 0) then 'if time based add it
                XYAddData(fdbckCH%, resetT, lastdata);
                if (game_mode% = 1) then XRange(resetT -1, resetT +2); endif'Moving win in XY for following trace on X with Y fixed, only time based.
            else 'if XY values from 2 channels gets it
                XYAddData(fdbckCH%, lastdataX, lastdata);
            endif
        endif;  'draw the x value as relative time to be able to have static ramps
      if ((relativetime/xywidth) >= n%) then 'if repetitive, re-Send the sequencer instruct'
        SampleKey(samplekey$);    'use sequencer based on sample key defined in SetEquipment%()
        View(xyVH%); XYDelete(fdbckCH%); 'Solution to remove data form xy view for repetitive cycle'
        n% := n% + 1; 'Potentially delete old point in the XY if becomes too slow'
      endif
        return 1;
    endif;

    if idlesave% = 1 and MaxTime() > (startramp + allXY%) then 'i need idle save other wise it will always enter here
      FrontView(mainVH%); 'set mainVH just to be sure to be in the time view'
      if samplekey$ = "M" or samplekey$ = "N" or samplekey$ = "L" then
          ProgRun("C:/Users/Biomech/Desktop/EchoWaveCMD.exe Freeze");    'Set the path of where you put the EXE file! Run in case of stimulation as the sequencer needs to be free
      endif
      CursorNew(MaxTime(),2);    ' cursor2 at max time
      Cursor(2, MaxTime()); CursorVisible(3);

      Yield(USdelay%); 'yield adapted, if US is triggered via cmd it takes a bit longer than 1 sec
      ExportChanList(1);    'initialise the channel list
      ExportChanList(Cursor(0), Cursor(0)+ (allXY%+2), -1); 'save from the time snippet was clicked to the length of the XY set (X-range*n_rep) + 2
      WriteFileName%(); 'Func to save and also send the potential cmd to US exe app to save with same name
      idlesave% := 0;
      quickAnalysis%(which%); 'call the function to analyse between cursor 2 and 3 based on selection selected
       GenerateTableError%(); 'Do an error tollerance check of the snippet XY relative to desired contraction, the View will be disaplyed based on a booled but the table is always calcualted
                
    endif

    return 1;
end;


'CHANGES BETWEEN DIFFERENT VIEW OPTIONS********************************************
Func ChangeView%()

    View(mainVH%);
    FrontView(mainVH%);
    WindowVisible(3);'maximize mainVH, XY ramp it's easy to access.
    return 1;
end;


'START NEW SAMPLING WINDOW AND LOAD CORRESPONDING CONFIGURATIONS*******************
Func New%()

    FileOpen("",6,1,"Select Sampling config file"); 'open dialog to load sampling config file
    SampleSequencer("D:/Paolo/Spiky_beta_2rot/fs_sequencer_adaptable.pls");     'sets sequencer file to use
    Message("WARNING! DISABLE ISOMED TRIGGER! Depending on the selected program rotation might occur.");
    ChkList_Seq%(); 'Run the function to update the CHAN in the sequencer file and avoid crash.
    mainVH% := FileNew(0, 2);    'creates a new sampling data file / time view but keep filtering process and/or virtual channels
    WindowVisible(3);    'maximises window
    FrontView(mainVH%); 'unnecessary line?
    ChanShow(-1); 'show all channels from the config as it is loaded as it is but people may forget they created channels and hid them
    SampleStart(); 'After file FileNew for a new Time view based on the sampling config'
    DisplayButtons();
    return 1;
end;


'XY-RAMP SETTINGS DIALOG***********************************************************
Func XYRampSettings%()
    var mxywidth := 60;'max a minute?

    DlgCreate("Settings for ramps with up to eight points");

    'general settings
    DlgChan(1, "Select feedback channel", 0x40000);
    DlgChan(2, "Select X-feedback channel (None = time)",0x20000); '0x20000 add None to all cahnnels, 0x20005 waveforms only + none but no virtual channel in case someone wants to do a centre pressure fox example'
    DlgReal(3, "Select Snippet time", 0, mxywidth);     'probably there will be no cases where more than 60 seconds are needed
    DlgReal(4, "Select allowed offset", 0.00, 0.15);
    DlgList(5, "Select what to do", "Ramp 1|Ramp 2|Import Array|MVC|Hand Draw");

    'ramp appearance settings
    var xp1% := 7;
    DlgGroup("Simple Ramp", 1, 6, 70, 17);    'just adds a fancy grouping rectangle
    DlgReal(6, "X-Value 1", -10000, 10000, 0, xp1%);    'there are certain cases when this is annoying and you need to close and open the dialog again
    DlgReal(7, "Y-Value 1 -----\t-----\t-----\t-----\t-----\t-----" , -10000, 10000, 0, xp1%+1);
    DlgReal(8, "X-Value 2", -10000, 10000, 0, xp1%+2);
    DlgReal(9, "Y-Value 2 -----\t-----\t-----\t-----\t-----\t----- ", -10000, 10000, 0, xp1%+3);
    DlgReal(10, "X-Value 3", -10000, 10000, 0, xp1%+4);
    DlgReal(11, "Y-Value 3 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+5);
    DlgReal(12, "X-Value 4", -10000, 10000, 0, xp1%+6);
    DlgReal(13, "Y-Value 4 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+7);
    DlgReal(14, "X-Value 5", -10000, 10000, 0, xp1%+8);
    DlgReal(15, "Y-Value 5 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+9);
    DlgReal(16, "X-Value 6", -10000, 10000, 0, xp1%+10);
    DlgReal(17, "Y-Value 6 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+11);
    DlgReal(18, "X-Value 7", -10000, 10000, 0, xp1%+12);
    DlgReal(19, "Y-Value 7 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+13);
    DlgReal(20, "X-Value 8", -10000, 10000, 0, xp1%+14);
    DlgReal(21, "Y-Value 8 -----\t-----\t-----\t-----\t-----\t-----", -10000, 10000, 0, xp1%+15);

    DlgGroup("Optional", 1, xp1%+16, 70, 6);
    DlgReal(22, "Offset for RMS", 0, 2, 0, xp1%+17);
    DlgReal(23, "Factor", -10, 10, 0, xp1%+18);
    DlgReal(24, "X value Vert line 1",0, mxywidth, 0, xp1%+19);
    DlgReal(25, "X value Vert line 2",0, mxywidth, 0, xp1%+20);
    DlgCheck(26,"GAME-MODE --> (tick in case of multiple XY-cycles) ",0, xp1%+21);

    DlgAllow(0x3ff, 0, ChangeXYSettingsDLG%);    'calls changexysettingsdlg function everytime a change in the xy-settings dialog was made

    throaway% := DlgShow(fdbkdata%, fdbkdataX%, xywidth, allowedoffset, rampnumber%, genxy, fdbkoffset, factor, vline, game_mode%);
    if throaway% > 0 then
        XYWindow%();    'should add after in the function change xy setting dlg but item that change doesn´t make sense
    endif
    return 1;
end;

'FUNCTION TO UPDATE XY-RAMP SETTINGS DIALOG DYNAMICALLY****************************
Func ChangeXYSettingsDLG%(item%)    'item% is the item number that was changed

    'Message(item%);
    var tempY$; 'var throaway%;
    docase

        'updates the xy-view immediately by already specifying the new variable value and not waiting for DlgShow OK
        case item% = 2 then fdbkdataX% :=  DlgValue(item%);
        case item% = 3 then xywidth := DlgValue(item%);
        case item% = 4 then allowedoffset := DlgValue(item%);
        case item% = 5 then    'when different ramp selected then updates
            rampnumber% := DlgValue(item%);

            if rampnumber% = 2 then 'if select ramp3 import txt file and overwrite values in the temp array
                fh% := FileOpen("*.txt;*.csv",8,0,"Select Text file with the array"); 'open dialog to load txt file with ramp
                if (fh% > 0) then     ' if we opened a file...

                    ReadSetup("\n"); 'check the format of the file!!!
                    var line$; 'later add two for because I initiliaze or adjust array based on the length of the txt
                    var extFile$ := FileName$(5); 'get extension of current file/view, necessary for csv
                    var i% := 0;
                    while Read(line$) >= 0 do 'read until the lines are finished
                        'resize array until all the lines are read
                        resize Import_rampX[i%+1]; resize Import_rampY[i%+1];
                        throaway% := InStr(line$,","); 'position of the comma, use the throaway var
                        tempY$ := Mid$(line$,throaway%+1); 'y is the second part, so read the char after the comma to end
                        var tempX$ := (Mid$(line$,1,throaway%-1)); 'with csv file the first is always 0 although it's read correctly
                        if i% = 0 and extFile$ = ".csv" then
                            tempX$:= (Mid$(line$,2,throaway%-1)); 'for some reason csv must start the first very number x at position 2
                        endif
                        'Save values in x and y array to plot later
                        Import_rampX[i%]:= Val(tempX$); 'convert x string to a number
                        Import_rampY[i%]:= Val(tempY$); 'convert y string to a number

                        i% := i% +1;   'move to the next line
                    wend;
                    'resize Import_rampY_scale[len(Import_rampY)]; 'resize the Import
                    FileClose();                 ' we are done with the file
                endif;

           endif;
           if rampnumber% = 0 then
                for x% := 0 to len(genxy)-1 do
                    DlgValue(x%+6, r1[x%]);    'set dialog fields to last entered value (or default) after changing from ramp to ramp
                    genxy[x%] := r1[x%];
                next;
            endif;
            if rampnumber% = 1 then
                for x% := 0 to len(genxy)-1 do
                    DlgValue(x%+6, r2[x%]);    'set dialog fields to last entered value (or default) after changing from ramp to ramp
                    genxy[x%] := r2[x%];
                next;
            endif;
        'In case XY fields changes, update real time
        case item% >= 6 and item% <= 21 then
           if rampnumber% = 0 then
            for x% := 0 to len(genxy)-1 do
                    r1[x%] := DlgValue(x%+6);
                    genxy[x%] := r1[x%];
                next;
            endif;
           if rampnumber% = 1 then
                for x% := 0 to len(genxy)-1 do
                    r2[x%] := DlgValue(x%+6);
                    genxy[x%] := r2[x%];
                next;
            endif;
          'Factor update
          case item% = 23 then factor := DlgValue(item%);
          'Update vertical line(s) location
          case item% = 24 or item% = 25 then vline[0] := DlgValue(24); vline[1] := DlgValue(25);

    endcase;

'   Message("Values : %d", rampnumber%);

    'update general xy appearance and +- feedback offset
    if rampnumber% = 0 or rampnumber% = 1 then

        DlgEnable(1, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21);
        DlgEnable(1, 22, 24, 25, 26);
        DlgEnable(0, 23);'No factor for linear ramp
        rampmax := Max(genxy[1], genxy[3], genxy[5], genxy[7], genxy[9], genxy[11], genxy[13], genxy[15]);    'for ramp range offset and for x and y range, only every second value off array as these are the y values
        rampmin := Min(genxy[1], genxy[3], genxy[5], genxy[7], genxy[9], genxy[11], genxy[13], genxy[15]);
        range := abs(rampmax * allowedoffset);    'feedback offset calculation
        if (abs(rampmax) < abs(rampmin)) then range := rampmin * allowedoffset; endif 'correct offest in case of neg values
        'gets the limit IN case X fdb is not time
        X_Lim[0] := Min(genxy[0], genxy[2], genxy[4], genxy[6], genxy[8], genxy[10], genxy[12], genxy[14]);
        X_Lim[1] := Max(genxy[0], genxy[2], genxy[4], genxy[6], genxy[8], genxy[10], genxy[12], genxy[14]);

    endif;


 ' RAMP 3
    if rampnumber% = 2 then 'plot data from the TXT imported.
        DlgEnable(0, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21);
        DlgEnable(1, 22, 23, 24, 25, 26);
        resize Import_rampY_scale [len(Import_rampY)]; 'Resize as Import_rampY_scale is used for both RAMP 3 and RAMP 5
        ArrConst(Import_rampY_scale,Import_rampY) ; 'create a scale Y array so the array multiplication doesn't affect the original one
        ArrMul(Import_rampY_scale, factor); 'scale the y values in case you want to change the intensity, but remember you are not changing the original file

        'Calculate ranges
        rampmax := Import_rampY_scale[Max(Import_rampY_scale)];
        rampmin := Import_rampY_scale[Min(Import_rampY_scale)];
        range := abs(rampmax * allowedoffset);
        if (abs(rampmax) < abs(rampmin)) then range := abs(rampmin * allowedoffset); endif 'correct offest in case of neg values
        'gets the limit IN case X fdb is not time
        X_Lim[0] := Import_rampX[Min(Import_rampX)];
        X_Lim[1] := Import_rampX[Max(Import_rampX)];

    endif
    ' RAMP 4 (MVC)
    if rampnumber% = 3 then
        DlgEnable(0, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21);
        DlgEnable(1, 22, 23, 24, 25, 26);
    endif
    'RAMP 5 (Hand draw)
    if rampnumber% = 4 then
        DlgEnable(0, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21);
        DlgEnable(1, 22, 23, 24, 25, 26);
        resize Import_rampY_scale [len(TraceToPlot)];
        ArrConst(Import_rampY_scale,TraceToPlot) ; 'create a scale Y array so the array multiplication doesn't affect the original one
        ArrMul(Import_rampY_scale, factor); 'scale the y values in case you want to change the intensity, but remember you are changing the original file
        'Calculate ranges
        rampmax := Import_rampY_scale[Max(Import_rampY_scale)];
        rampmin := Import_rampY_scale[Min(Import_rampY_scale)];
        range := abs(rampmax * allowedoffset); 'offset of calculation
        if (abs(rampmax) < abs(rampmin)) then range := abs(rampmin * allowedoffset); endif 'correct offest in case of neg values

    endif

    XYWindow%();    'update the xy-window everytime

    return 1;
end;


'OPEN THE XY VIEW FOR RAMP BIOFEEDBACK*********************************************
Func XYWindow%()

    if xyVH% <= 0 then
        xyVH% := FileNew(12, 0); WindowVisible(3);    'creates the xy-view if it has not been created

        'create channels for ramp and biofeedback as well as general settings for those
        lrampCH% := XYSetChan(0, 0, 0, 1);    'new channel, no fixed number of data points, no sorting, join by line
        urampCH% := XYSetChan(0, 0, 0, 1);
        fdbckCH% := XYSetChan(0, 0, 0, 1);

        XYDrawMode(lrampCH%, 2, 0);    '2: size of marker points --> invisible
        XYDrawMode(urampCH%, 2, 0);
        XYDrawMode(fdbckCH%, 2, 0);
        XYDrawMode(lrampCH%, 4, 3);    '4: line thickness (0 - 10)
        XYDrawMode(urampCH%, 4, 3);
        XYDrawMode(fdbckCH%, 4, 3);

        ChanColourSet(lrampCH%, 1, 0, 0.21, 0.38);    'RUB-blue
        ChanColourSet(urampCH%, 1, 0, 0.21, 0.38);    'RUB-blue
        ChanColourSet(fdbckCH%, 1, 0.55, 0.68, 0.06);    'RUB-green

        XYDrawMode(-1, 5, 0);    'no auto scaling

        'MVC line stuff
        llrampCH% := XYSetChan(0, 0, 0, 1);    'new channel, no fixed number of data points, no sorting, join by line
        uurampCH% := XYSetChan(0, 0, 0, 1);

        XYDrawMode(llrampCH%, 2, 0);    '2: size of marker points --> invisible
        XYDrawMode(uurampCH%, 2, 0);
        XYDrawMode(llrampCH%, 4, 3);    '4: line thickness (0 - 10)
        XYDrawMode(uurampCH%, 4, 3);

        ChanColourSet(llrampCH%, 1, 0, 0.21, 0.38);    'RUB-blue
        ChanColourSet(uurampCH%, 1, 0, 0.21, 0.38);    'RUB-blue

        'Vertical lines
        vertLine% := XYSetChan(0, 0, 0, 1);    'new channel, no fixed number of data points, no sorting, join by line
        XYDrawMode(vertLine%, 2, 0);    '2: size of marker points --> invisible
        XYDrawMode(vertLine%, 3, 2);    '3: line style 1 --> dotted
        XYDrawMode(vertLine%, 4, 1.8);    '4: line thickness (0 - 10)
        ChanColourSet(vertLine%, 1, 0, 0.21, 0.38);    'RUB-blue

        vertLine2% := XYSetChan(0, 0, 0, 1);    'new channel, no fixed number of data points, no sorting, join by line
        XYDrawMode(vertLine2%, 2, 0);    '2: size of marker points --> invisible
        XYDrawMode(vertLine2%, 3, 2);    '3: line style 1 --> dotted
        XYDrawMode(vertLine2%, 4, 1.8);    '4: line thickness (0 - 10)
        ChanColourSet(vertLine2%, 1, 0, 0.21, 0.38);    'RUB-blue

    endif;
    'set the view
    FrontView(xyVH%);

    XYDelete(lrampCH%);    'make sure previous data is deleted
    XYDelete(urampCH%);
    XYDelete(llrampCH%);
    XYDelete(uurampCH%);
    XYDelete(vertLine%);
    XYDelete(vertLine2%);

    'add the data for the ramps as defined in the settings / dialog box
    if rampnumber% <= 1 then
        for x% := 1 to len(genxy)/2 do
            XYAddData(lrampCH%, genxy[x%*2-2], genxy[x%*2-1]-range);
        next;
        for x% := 1 to len(genxy)/2 do
            XYAddData(urampCH%, genxy[x%*2-2], genxy[x%*2-1]+range);
        next;

    endif;
    'Imported txt
    if rampnumber% = 2 then

        if fdbkdataX% = 0 then 'in case X time
            for x% := 0 to len(Import_rampX)-1 do
                XYAddData(lrampCH%, Import_rampX[x%], Import_rampY_scale[x%]-range);
                XYAddData(urampCH%, Import_rampX[x%], Import_rampY_scale[x%]+range);
            next;
        else   'case X is another variable, calculate +- offset (as percentage)<-- not sure yet this makes really sense
             for x% := 0 to len(Import_rampX)-1 do
                    XYAddData(lrampCH%, Import_rampX[x%]*(1-allowedoffset), Import_rampY_scale[x%]-range);
                    XYAddData(urampCH%, Import_rampX[x%]*(1+allowedoffset), Import_rampY_scale[x%]+range);
                next;
        endif

    endif;
    'MVC
    if rampnumber% = 3 then 'SET THE HORIZONTAL LINES LIMITS for MVC
        'just two local vars to keep max and min'
        'scale depending on the factor. Like you do 100% MVC and then you scale to 80%
        var minMVCramp := minMVC * factor;
        var maxMVCramp := maxMVC * factor;
        range := maxMVCramp * allowedoffset; 'this for positive/max then do the same for negative
        for x% := 0 to 15 do'Just plot for 15 sec
            XYAddData(llrampCH%, x%, maxMVCramp - range);
        next;
        for x% := 0 to 15 do
            XYAddData(uurampCH%, x%, maxMVCramp + range);
        next;

        range := minMVCramp * allowedoffset; 'do range for negative'
        'Negative MVC --> if you have just one direction contraction you can either do Ch(1)*-1
        for x% := 0 to 15 do
            XYAddData(lrampCH%, x%, minMVCramp - range);
        next;
        for x% := 0 to 15 do
            XYAddData(urampCH%, x%, minMVCramp + range);
        next;
        'YRange(-1, (minMVCramp)*1.2, maxMVCramp*1.2); 'min/max of all ramp values + 20 for nicer view

    endif
    'Hand drawn ramp
    if rampnumber% = 4 then 'draw the boundiers of the hand drawn trace
        for x% := 0 to len(Import_rampY_scale)-1 do
            XYAddData(lrampCH%, x%/pWaveRate, Import_rampY_scale[x%]-range);
            XYAddData(urampCH%, x%/pWaveRate, Import_rampY_scale[x%]+range);
        next;
    endif

   'Optimise the y axis automatically, it saves lines of code and calculation. Fix the x axis to the xywidth to remind that snippet saving according to that
    Optimise(-2); 'Visible channels
    if fdbkdataX% = 0 then XRange(0,xywidth); '0 = none feedback
    else XRange(X_Lim[0]*1.1,X_Lim[1]*1.1);endif 'rampmin are related to Y and not X

    'VERTICAL LINE PLOT
    'Plot after the Optimise, so it won't fuck it up
    'just two hyphotetical values (I guess it's hard that someone reaches 1000 peak 2 peak)'
    'if they are set to 0 do not add them, because it's annoying for the XY view axis
    if (vLine[0] <> 0) then
      XYAddData(vertLine%, vline[0], -500);
      XYAddData(vertLine%, vline[0], 500);
    endif
    if (vLine[1] <> 0) then
      XYAddData(vertLine2%, vline[1], -500);
      XYAddData(vertLine2%, vline[1], 500);
    endif

   return 1;
end;


'FUNCTION TO DRAW RAMP, STANDING ALONE OR CALLED BY ANOTHER FUNCTION***************
Func GetXYData%()
    View(mainVH%);
    startramp := MaxTime();    'will result in idle if-statement being true

    if xyVH% > 0  then
        View(xyVH%);
        XYDelete(fdbckCH%);     'removes old biofeedback
    endif;
    return 1;
end;


'SELECT WHICH EQUIPMENT SHOULD BE ACTIVATED WHEN SAVING A SNIPPET******************
Func SetEquipment%()

    DlgCreate("Select Capture Equipment");
    DlgLabel(1, "Devices that will be used / triggered during XY width duration snippet");
    DlgCheck(2, "Save Snippet");
    DlgCheck(3, "Ultrasound");
    'DlgCheck(3, "Tendon Tapper");
    'DlgCheck(4, "Motion Capture");
    DlgCheck(4, "Isomed 1 Rot");
    DlgCheck(5, "Isomed 2 Rot");
    DlgCheck(6, "Short tap");
    DlgCheck(7, "DAC 1 TTL 3V SQUARE WAVE(to triggering any external system)");
    'DlgCheck(8, "DAC3"); 'To remove'
    DlgCheck(8, "Stimulation");
    DlgCheck(9, "Stimulation at specific value");
    DlgLabel(10, "Note that not any/all combination are possible, please read the README. \nIsomed triggered after n sec, Ultrasound frame line at @100 Hz or using the CMD app");
    DlgLabel(11, "In case the Motion Capture needs a TTL, I suggest that you use DAC1. \nShort Tap not set here");
    'DlgShow(throaway%, uscheck%, tappercheck%, motioncapcheck%, isomedcheck%, savetrue%, shorttap%, throaway%);
    DlgShow(throaway%, savetrue%, uscheck%, isomedcheck%, isomedcheck2%, shorttap%, DAC1_TTL%, Stim%, StimP%, throaway%, throaway%);

'Doesn't matter what people really use, just use less instruction for the same purpose.
'DAC1_TTL it is always useful to have, then if people do not connect any cable, or don't use it, it doesn't matter.
'E.g., I need 2 rotations but no Ultrasound, just tick US but it won't be opened in Echowave or whatsoever
    docase
        case uscheck% = 0 and DAC1_TTL% = 0 and isomedcheck% = 0 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 0  then samplekey$ := "P";  'only save snippet
        case uscheck% = 0 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 1 and Stim% = 0 and savetrue% = 1 and StimP% = 0  then samplekey$ := "S"; 'This is for special case that fast events occur (> 100Hz, limit of US sync)
        'With US stuff for "slower things"
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 0 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 0 then samplekey$ := "u"; USdelay% := 1;    'ultrasound only as XY WIDTH * rep but no rotations
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 0 then samplekey$ := "J"; USdelay% := 1; 'US @100Hz, TTL DAC1 and a single rotation'
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 1 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 0 then samplekey$ := "k"; USdelay% := 1; 'US @100HZ, TTL DAC1 and two rotations'
        'Stim part'
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 0 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 1 and savetrue% = 1 and StimP% = 0 then samplekey$ := "M"; USdelay% := 3; 'US through the cmd window, TTL DAC1 for whatever
        'US through the cmd window, TTL DAC1 for whatever and 1 isomed rotation or 2
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 1 and savetrue% = 1 and StimP% = 0 then samplekey$ := "N"; USdelay% := 3;
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 1 and shorttap% = 0 and Stim% = 1 and savetrue% = 1 and StimP% = 0 then samplekey$ := "L"; USdelay% := 3;
        'TO DO: Stim at specific value
        'US through the cmd window, TTL DAC1 for whatever and no rotation
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 0 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 1 then samplekey$ := "A"; USdelay% := 3;
        'US through the cmd window, TTL DAC1 for whatever and isomed rotation
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 0 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 1 then samplekey$ := "B"; USdelay% := 3;
        case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 1 and shorttap% = 0 and Stim% = 0 and savetrue% = 1 and StimP% = 1 then samplekey$ := "C"; USdelay% := 3;

        'case uscheck% = 1 and DAC1_TTL% = 1 and isomedcheck% = 1 and isomedcheck2% = 1 and Stim% = 0 and savetrue% = 1 and StimP% = 1 then samplekey$ := "HARD TO DEFIN"; 'US through the cmd window, TTL DAC1 for whatever and isomed rotation

        else samplekey$ := "n"; Message("No SEQUENCER instruction found");    'just instructs the sequencer to HOLD
    endcase;

    return 1;
end;

'FUNCTION TO TRIGGER EQUIPMENT, START BIOFEEDBACK AND SAVE SHORT SNIPPETS**********
Func Snippet%()

    if (samplekey$ = "n") then
        Message("No equipment option selected");
    else
        allXY% := xywidth * repXYcycle%; 'calculate overall XY duration'
        'prepare a cursor from which on the snippet can be saved
        View(mainVH%);
        n% := 1; 'reset number of contractions/XY performed'

        Cursor(0, MaxTime());
        CursorVisible(0,1);
        CursorActive(0,14, 31, 0, "", "", 1);   'Data points --> keyboard. Make cursor 0 active to search keyboard
        'easy to navigate everytime you snippet'

        'Pass values to the sequencer variables, call it here because people can keep the same equip but change the parameters, so when they snippet those parms are updated for the "new condition"
        SetUp_VarSeq%(); 'Firt snippet Send Vars to sequencer'

        'this is a bit delay because of EchoWave it self'
        if samplekey$ = "M" or samplekey$ = "N" or samplekey$ = "L" then 'whatever instruction requires the sequecer to stimulate specifically or checking real time variable for stimulation then
          ProgRun("C:/Users/Biomech/Desktop/EchoWaveCMD.exe Run");    'Set the path of where you put the EXE file! Run in case of stimulation as the sequencer needs to be free
        endif
        'you can't rely on the timing of the cursor positions for post-analysis, therefore save an extra second beforehand,
        'such that you can always refer to your event timestamp or TTL channels as common signal
        Yield(USdelay%); 'yield based on ultrasound mode

        CursorNew(MaxTime(),1);    'set the cursor1 already in the main view
        Cursor(1,MaxTime());
        'CursorVisible(1,1);

        SampleKey(samplekey$);    'use sequencer based on sample key defined in SetEquipment%()
        GetXYData%();   'sets startramp variable to current time so that biofeedback can be given

        if savetrue% = 1 then idlesave% := 1; endif;    'idle function checks for state of idlesave% variable
        'if storecramp% = 1 then idlecramp% :=1; endif;     'idle function checks for state of idlecramp% variable
    endif
    return 1;

end;

'FUNCTION TO STOP SNIPPET and HALT ANY SEQUENCER INSTRUCTION SENT************************
Func StopSnippet%()
  SampleKey("P");
  allXY% := 0; 'The if statement the idle that is true'
  return 1;
end

'FUNCTION TO CHECK LAST XY view AND SETUP THE SEQUENCER BEFORE SNIPPET************************
Func SetUp_VarSeq%()

var TickClk := round(1 / (SampleSeqClock(1) / 1000)); 'get running seq clock '100000;'SampleSeqClock(1); /1000 because in ms
'var TickClk := 100000;
'Adjust variables based on sequencer instruction '
docase
case samplekey$ = "M" or samplekey$ = "N" or samplekey$ = "L" then 'NOT USING SAMPLE KEY because if I change the parameters in seq settings it does not change sample to STIM1 again

 'Isomed stuff '
  SampleSeqVar(11,(TP_Isomed[0]*TickClk) ); '
  SampleSeqVar(12,(TP_Isomed[1]*TickClk) ); '

  SampleSeqVar(99, xywidth*TickClk); 'XY width /single snippet time duration'

  SampleSeqVar(17, Stim_Set[0]*TickClk); 'beginning of stimulation train'
  SampleSeqVar(18, Stim_Set[1]*TickClk); 'end of stimulation train'
  SampleSeqVar(19, ((1/Stim_Set[2]) * TickClk)-4 ); 'delta time for the delay in the seq loop, -4 because each time the loop DBNZ takes 3+1 delay instruction ticks
  SampleSeqVar(20,  n_Stim%);' Stim_Set[3]); 'num of stimulation to send = repeating loop

case samplekey$ = "A" or samplekey$ = "B" or samplekey$ = "C" then 'Message("No sequencer created yet, baustelle!");

    'For stimulation at specific value with potential rotations
    SampleSeqVar(10,xywidth*TickClk); 'Set to the sequencer V10 to the duration of XY width and then repeat it, makes calculation easier'
    SampleSeqVar(11,(TP_Isomed[0]*TickClk) ); 'If only ISOMED fix to 10us as it won´t be a loop but just a delay, -1 for the tick
    SampleSeqVar(12,(TP_Isomed[1]*TickClk) );
    'SampleSeqVar(15,((xywidth-TP_Isomed[1])*TickClk));
    'SampleSeqVar(14,((TP_Isomed[1]-TP_Isomed[0])*TickClk));

    'Convert back from Plot to DAC16 in Voltage' y axis value = (16-bit value)*scale/6553.6 + offset
    var ChScale := ChanScale(StimP_set[0]);
    var ChOffset := ChanOffset(StimP_set[0]);
    var Threshold := round( 6553.6 * 0.001 );'Create a 0.1% error hysterisys based on the scale', 7 bits, so 1mV error....for our application fine
    'var Threshold := 3; '3 Bit error threshold is enough? I'd say yet, but people might change
    'round(1/6553.6), bit resolution * 1 because potential noise in the data, 6553.6 Each volt corresponds to approximately 6553.6 digital units.
    'Convert back to voltage for sequencer purpose --> Volt_Val = (Channel - offset) / scale;
    'Convert back to 16-bit digital values for sequencer purpose --> Digital_Val = (Channel - offset) / scale * 6553.6;
    SampleSeqVar(22, round(((StimP_set[1] - ChOffset) / ChScale) * 6553.6) - Threshold);
    SampleSeqVar(23, round(((StimP_set[1] - ChOffset) / ChScale) * 6553.6) + Threshold);
else 'default' with US sync frame line in @ 100Hz, for SSC var 11, 15 and 16 are MULI in the sequencer, so no worries, it works for SSC too.
  SampleSeqVar(10,xywidth*100); 'Set to the sequencer V10 to the duration of XY width and then repeat it, makes calculation easier'
  SampleSeqVar(11,(TP_Isomed[0]*100)); '-1 otherwise there is a shift of ~120ms due to a duty cycle for triggering the US
  SampleSeqVar(12,(TP_Isomed[1]*100));
  SampleSeqVar(14,((xywidth-TP_Isomed[0])*100));
  SampleSeqVar(15,((TP_Isomed[1]-TP_Isomed[0])*100));
  SampleSeqVar(16,((xywidth-TP_Isomed[1])*100));

  'Stimulation variables with no rotation
  SampleSeqVar(17, Stim_Set[0]*TickClk);
  SampleSeqVar(18, (1/Stim_Set[2]) * TickClk ); 'delta time for the delay in the seq loop
  SampleSeqVar(19, n_Stim%);' Stim_Set[3]); 'num of stimulation to send = repeating loop
  SampleSeqVar(20, (xywidth - Stim_Set[1]) * TickClk); 'delay to the end of the XY view

 endcase
  return 1;
end

'FUNCTION to set up values pass to the sequencer to create the desired condition and choose how many times to repeat the XY ramp view ***************************************************************************************
Func RepXY%()

    var oldCh% := StimP_set[0]; 'local var used for a single local scope
    var oldVal := StimP_set[1]; 'local var used for a single local scope

    DlgCreate("Repetitive XY & Sequencer Configuration");
    DlgLabel(1,"Do not set >5Hz stimulations for TMS");
    DlgLabel(2,"CAUTION! The Snippet works based on the 'Snippet time of XY ramp' value and not on the last X value!");
    DlgInteger(3,"Repetition of the XY view", 1, 100);    'there are certain cases when this is annoying and you need to close and open the dialog again

    DlgGroup("IsoMed rotation settings",1,4,85,3);
    DlgReal(5, "TimePoint IsoMed Rotation 1 (s)",1, xywidth-0.25);'as US is triggered at 100Hz, if last rotation - XY time < 0.1 == infinite loop
    DlgReal(6, "TimePoint IsoMed Rotation 2 (s)",1, xywidth-0.25);

    DlgGroup("Stimulation settings", 1, 7, 85,5);
    DlgReal(8, "Beginning Stimulation (s)", 0, xywidth-1);
    DlgReal(9, "End Stimulation (s)", 0, xywidth);
    DlgReal(10, "Frequency (Hz)", 0, 1000);
    DlgLabel(11, "Number of stimulations: " + Str$(n_Stim%));
    'Necessary to design the different sequencer instruction as torque might be the same at different position for example'
    DlgGroup("Stimulation settings to stimulate at a specific value",1,12, 85, 6);
    DlgChan(13, "Select the channel to check", 0x01); 'Show only waveforms as CHAN in the sequencer use BIT wise control
    DlgReal(14, "Pulse (1ms) at value equal to:",-10000,10000);
    DlgCheck(15,"Pulse before triggering first rotation");
    DlgCheck(16,"Pulse during/after Isomed rotation 1");
    DlgCheck(17,"Pulse during/after Isomed rotation 2");

    DlgAllow(0x3ff, 0, UpdateNumStim%);    'calls it everytime a parameter change for updating the number of stims. This prevents potential issue

    'Remember: thoraway is used because DlgGroup is a variable return as the Dlg starts one number after
    'if DlgReal(1,xxx), DlgGroup(bla), DlgReal(3,xxx); then the element 2 is returned as whatsoever so put in throaway.
    'it is used to make it easier to create the correct size of the dialog input
    throaway% := DlgShow( throaway%, throaway%, repXYcycle%, throaway%, TP_Isomed, throaway%, Stim_Set, throaway%,throaway%, StimP_set);
    'PrintLog(StimP_set[0]);
    'If OK is pressed sort Isomed rotation and calculate new stimulation train and update the sequencer
    if throaway% > 0 then
        'SORT for the idiots that wanna try finding a bug
        ArrSort(TP_Isomed);
        n_Stim% := (Stim_Set[1] - Stim_Set[0]) * Stim_Set[2];'need to round for DBNZ in the sequencer
        if StimP_set[0] <> oldCh% or StimP_set[1] <> oldVal then
            SwitchChannel%(StimP_set[0]); 'Update sequencer instructions with the desired channel ONLY if this changes, I am not a fan of re running a running sequencer
        endif
         'calculate and set variables to the sequencer
        'Stim_Set[3] := n_Stim%; need to change DlgLabel 11 to dlgreal
        'Should I create a threshold already 5% for Stim before being passed to the sequencer?'
    endif
    'SetUp_VarSeq%(); //not necessary as the variables will updates ONCE you click snippet, but the values to match are saved in the background
    return 1;
end

'FUNCTION FOR UPDATING REAL-TIME NUMBER OF STIMULATION **************************************************************************
Func UpdateNumStim%(item%)
var v%;
    docase
        case ((item% = 8) or (item% = 9) or (item% = 10)) then '0 is initial setup
         v% := (DlgValue(9) - DlgValue(8)) * DlgValue(10);'need to round for DBNZ in the sequencer
         DlgValue$(11,"Number of stimulations: " + Str$(v%));'Update value in the dialog
endcase;
return 1;                     'Return 1 to keep dialog running
end;

'DIALOG BOX FOR WRITE FILE NAME **************************************************************************
'Dialog Box to set up the name for files and Return the NameFiles(global var)
'it will concate it with the Path and send the instruct the cmd program made
'for saving the ultrasound with the same path + filename
Func WriteFileName%()

  NameFiles$ := "";
  ' variables for the Dialog
  var butCancel% := 0, shitCheck% := 1;  'just a check '
  var ItemText$:= "";
  'need this shit otherwise error --> too loooooong argument
  var expFlags$ := "UseSName=0|UseCName=1|WaveTimes=1|BinFreq=0|BinTimes=0|WaveData=2|MarkAs=1|TMarkAs=2|RMarkAs=2|RMarkData=2|WaveMarkAs=2|WaveMarkData=2|Compat=0|WaveAll=1|WaveSameN=0";

    'Dialog box
    while(ItemText$ = "" or shitCheck% = 1 ) do
        DlgCreate("Type the file name (without ext)\nRaw data will be exported",0,0,100,5);
        DlgString(2, "File Name (max 100 chars)",80,"",-6,1.5);    'String item with max 100char (you can change that)
        DlgAllow(0x3ff, 0);     'Allow all, no idle, change function
        butCancel% := DlgShow(throaway%,ItemText$);  '1 if ok is pressed, 0 if cancel is pressed

        if (butCancel% = 0) then 'exit the dowhile loop
            break;
        endif

        if (ItemText$ = "") then
            Message("Type a name! \nYou can't leave it blank!");
        else
            'if save goes well it returns zero otherwise it returns other codes < 0
            'ChanProcessClear(-1); 'remove all the operations from the channels to export raw data
            BackupChProcess%(); 'Backup and clear all processes from all NON virtual channel before exporting
            shitCheck% := FileSaveAs(ItemText$ + ".mat", 100, 0, "", 0,expFlags$); 'Export (string args)
            ReApplyProc%(); 'Re-applying NON virtual channel processes with their given values

            'if you tick Ultrasound then Run The script.EXE for saving the TVD file automatically with the Path and File Name
             if uscheck% = 1 and shitCheck% = 0 then
                 NameFiles$ := FilePath$() + ItemText$;
                 ProgRun("C:/Users/Biomech/Desktop/SaveECO.exe " + NameFiles$);    'Set the path of where you put the EXE file!
             endif;

             if shitCheck% = 0  then break; endif; 'if you save/overwrite just break and return'
             shitCheck% := 1; 'Must put back to 1 because if you don't save and want to change the name the loop restart
        endif
    wend

    return 1;
end;

'START ULTRASOUND******************************************************************
Func USStart%()
    SampleSeqVar(1, 1);    'the sequener variable '1' controls ifinity ultrasound triggering, 1 for starting, anything else for breaking out
    SampleKey("U");
    ToolbarSet(5, "Stop US", USstop%);
    return 1;
end;

'STOP ULTRASOUND******************************************************************
Func USStop%()
    SampleSeqVar(1, 0);    'the sequener variable '1' controls ifinity ultrasound triggering, 1 for starting, anything else for breaking out
    ToolbarSet(5, "Start US", USstart%);
    return 1;
end;


'MOVE ISOMED***********************************************************************
Func Isomed%()
    SampleKey("I");    'moves the isomed by sending a digital output to bit 2-3 on the back (10-11)
    return 1;
end;


'STOP SAMPLING*********************************************************************
Func StopSampling%()
    var ret%;
    ret% := Query("Are you sure you wish to stop sampling?");    'dialog box to say yes or no to stopping the sampling process
    if ret% = 1 then
        SampleKey("Q");    'put ALL BITs back to 0
        FrontView(mainVH%);
        SampleStop();
    endif;
    ToolbarEnable(22, 1);   'starting a new sampling process becomes available again
    ToolbarEnable(1, 1);    'quitting the script becomes available, at least you can't accidentally close a window until then
    return 1;
end;


'SAVE FILE*************************************************************************
Func SaveData%()
    FrontView(mainVH%);
    FileSave();    'Saves sampled data file
    return 1;
end;

'SELECT WHICH ANALYSIS SHOULD BE PERFORMED WHEN CLICKING SNIPPET******************
Func SetAnalysisOpts%()

    DlgCreate("Select analysis");
    DlgLabel(1, "Select what analyse of the feedback channel: ");
    DlgList(2, "Choose", listAnalysis$[]); 'Add the list to the dialog ok% := DlgShow(which%); 'Display dialog, wait for user
    DlgShow(throaway%, which%);
    quickAnalysis%(which%);

    return 1;
end;

'FUNCTION TO SET MANUALLY MVC VALUES. MAYBE YOU CHANGE THE ROM/ANGLE **********
Func setMVC%()

    DlgCreate("Min & Max settings");
    DlgLabel(1, "Set Max (positive) and Min (negative) MVC values \nRange limits are set on XYramp");
    DlgReal(2, "Max", -1000, 1000);    'there are certain cases when this is annoying and you need to close and open the dialog again
    DlgReal(3, "Min", -1000, 1000);
    DlgCheck(4, "Check Min and Max");
    DlgLabel(5, "Tick the latter if you want to check everytime you snippet the min and max");
    DlgShow(throaway%, maxMVC, minMVC,checkMVC%,throaway%);

    quickAnalysis%(which%);
    return 1;
end

'QUICK ANALYSIS BETWEEN CURSORs 2 and 3 from snippet *************************************************************************
Func quickAnalysis%(which%)

  FrontView(mainVH%); 'set mainVH just to be sure to be in the time view'
  'if MVC is true then return and store them in max and min MVC
  if checkMVC% > 0 then
    'Check max and min MVC and store the peak values. Useful for checking fatigue if subject can still reach 95% of the best or if he faked it'
    if(maxMVC < ChanMeasure(fdbkdata%,8,Cursor(1),Cursor(2))) then
      maxMVC := ChanMeasure(fdbkdata%,8,Cursor(1),Cursor(2));
    endif
    if(minMVC > ChanMeasure(fdbkdata%,9,Cursor(1),Cursor(2))) then
      minMVC := ChanMeasure(fdbkdata%,9,Cursor(1),Cursor(2));
    endif
  endif

    'Always set cursor 1 and 2 active to follow cursor 0 so easy to navigate and perform analysis each time you snippet'
    'if CursorExists(1) = 0 and CursorExists(2) = 0 then
    '    'Set cursor 1 and 2 in active mode
    '    CursorActive(1,16, 0, "Cursor(0)+1");   'Expression
    '    var tmp$ := "Cursor(1) + " + Str$(xywidth);    'I need to convert it
    '    CursorActive(2,16, 0, tmp$);   'Expression
    '  endif
  'Create two horizontal cursor for max and min'
  'HCursorDelete(-1); 'Delete all cursors otherwise will add tons of them
  if HCursorExists(1) = 0 and HCursorExists(2) = 0 then
        HCursorNew(1, -0);
        HCursorNew(2, -0);
  endif
  HCursor(1);
  HCursor(2);
  HCursorActive(1,4, Cursor(2), Cursor(3), 0, 0);   ' Cursor 1 Max level
  HCursorActive(2,5, Cursor(2), Cursor(3), 0, 0);   ' Cursor 2 Min level

'''''''''''''''''' HERE in case you can play around with the cursor 2-3 to detect whatever you want
    docase
        case which% = 1 then CursorOpen(1, 1, -2, 10); '10 = Peak2Peak
        case which% = 2 then CursorOpen(1, 1, -2, 1); '1 = Area
        case which% = 3 then CursorOpen(1, 1, -2, 2); '2 = Mean
        case which% = 4 then CursorOpen(1, 1, -2, 8); '8 = Max
        case which% = 5 then CursorOpen(1, 1, -2, 9); '9 = Min
        case which% = 6 then CursorOpen(1, 1, -2, 12); '12 = SD
    endcase;

end

'BUTTON TO SEND FREEZE/UNFREEZE via CMD to EHCOWAVE*************************************************************************
Func TapUS%()
    ProgRun("C:/Users/Biomech/Desktop/EchoWaveCMD.exe Tap");
    return 1;
end


'MAKE HAND DRAW TRACES TO PLOT ************************************************************************
Func MakeWave%()                                               			'Function to generate waveform
DlgCreate("Playwave view parameters");                              			'Parameters dialog
DlgReal(1,"Time Points Resolution / Frequency (Hz)",1,1000);
DlgReal(2,"Playwave duration (s)",0.01,xywidth); '60 is the limit we put for the trace in the xy settings
DlgReal(3, "Channel Offset", 0, 1000);
DlgReal(4, "Channel Full Scale",0.0001,1000000);

throaway% := DlgShow(pWaveRate,xywidth,outZero,outMax);    	'Return variables
if throaway% > 0 then
    View(mainVH%);
    ToolbarSet(25, "Draw", AddPWave%);

	if drawView% < 0 then                                            		'Clear any existing result views
		View(drawView%);
		FileClose(0,-1);
		drawView% := 0;
	endif;
	pWaveInt := 1.0/pWaveRate;                                   		'Get sample interval
    pWavePts% := xywidth*pWaveRate;                          		'Get number of points to output
    drawView% :=SetResult(1,pWavePts%,pWaveInt,0,"PlayWave","s");    		'Set up result view with appropriate bin size etc
    DrawMode(1,2);                                                      'Draw in waveform mode
    YRange(1,outZero - (outMax-outZero),outMax);
	ChanUnits$(1,"Channel Unit");
    Window(0,0,100,100);    View(drawView%);
    'Disable other buttons until ready for saving the draw
        ToolbarEnable(1, 0);
        ToolbarEnable(2, 0);
        ToolbarEnable(3, 0);
        ToolbarEnable(5, 0);
        ToolbarEnable(6, 0);
        ToolbarEnable(7, 0);
        ToolbarEnable(8, 0);
        ToolbarEnable(9,  0);
        ToolbarEnable(10, 0);
        ToolbarEnable(11, 0);
        ToolbarEnable(13, 0);
        'ToolbarEnable(15, 0);
        ToolbarEnable(18, 0);
        ToolbarEnable(19, 0);
        ToolbarEnable(20, 0);
        ToolbarEnable(25, 1);

    FrontView(drawView%);
	ToolbarMouse(drawView%,0,4,5,Down%,Up%,Move%);                   		'Set up mouse capture requiring shift and left mouse button to activate functions
    ToolbarText("Keep press Shift while moving the mouse for drawing. Click 'Draw' to save the waveform for XY ramp");

endif;
return 1;
end;
'SAVE HAND TRACE TO PLOT IN XY *************************************************************************
Func AddPWave%();
    'get data from the sketch and then close the view
    resize TraceToPlot [Len(View(drawView%).[])]; 'resize The array to plot
    ArrConst(TraceToPlot,View(drawView%,1).[]); '.[] to get elements in the results view as array
    View(drawView%);
    FileClose(0,-1);

    View(mainVH%);
    ToolbarSet(25,"Draw Trace",MakeWave%);
    ToolbarText("Collect awesome data!");
    're-enable other buttons
    ToolbarEnable(1, 1);
    ToolbarEnable(2, 1);
    ToolbarEnable(3, 1);
    ToolbarEnable(5, 1);
    ToolbarEnable(6, 1);
    ToolbarEnable(7, 1);
    ToolbarEnable(8, 1);
    ToolbarEnable(9,  1);
    ToolbarEnable(10, 1);
    ToolbarEnable(11, 1);
    ToolbarEnable(13, 1);
   'ToolbarEnable(15, 0);
    ToolbarEnable(18, 1);
    ToolbarEnable(19, 1);
    ToolbarEnable(20, 1);
    ToolbarEnable(25, 1);

    return 1;
end;

'GET MOUSE POSITION(s)*************************************************************************
Func Down%(vh%,chan%,x,y,flags%)
View(drawView%); 'Function for left mouse button press
if XtoBin(x) >= 0 and XToBin(x) <= Len([])-1 then                	'If within range
    [XToBin(x)] := y;                                            		'Set bin at mouse x position to mouse y position
    oldX% := XtoBin(x);                                          	'Update variables with last mouse position
    oldY := y;
endif;
return 1;
end;


Func Up%(vh%,chan%,x,y,flags%)                                   		'Function for left mouse button up
return 1;
end;

Func Move%(vh%,chan%,x,y,flags%)                                		'Function for mouse movement
var bin%;                                                       		'Current bin position of mouse
var pts%;                                                       		'Number of points moved since last time function called
View(drawView%);
bin% := XToBin(x);                                              		'Get bin position
if bin% >= 0 and bin% <= Len([])-1 then                         		'If within area
    if bin% <> oldX% then                                       		'Has it moved?
        pts% := Abs(bin%-oldX%);                                		'Count points moved since past call
        var line[pts%+1];                                       		'Declare array to contain interpolated points
            if bin% > oldX% then                                		'If mouse moved right (positive change)
                ArrConst(line[1:pts%],(y-oldY)/pts%);           		'Fill array with incremental y change per bin
                ArrIntgl(line[]);                               		'Integrate to get slope
                ArrAdd(line[],oldY);                            		'Add starting level to array
                ArrConst([oldX%:pts%],line[]);                  		'Add into result view
            else
                ArrConst(line[1:pts%],(oldY-y)/pts%);           		'Same process for moving left (negative change)
                ArrIntgl(line[]);
                ArrAdd(line[],y);
                ArrConst([bin%:pts%],line[]);
            endif;
    else
        [XToBin(x)] := y;                                       		'If not moved in x, update current bin with y mouse position
    endif;
    oldX% := bin%;                                              		'Update variables with mouse position
    oldY := y;
endif;
    return 1;
end;

'UPDATE SEQUENCER AND SWITCH CHANNEL*************************************************************************
Func SwitchChannel%(ChanToChk%)
'Read each line and find the one with CHAN
'Create a new line with the new channel selected from the list in the script
'Use find and replace to find the exact string and replace with the newer one
'Save and load the sequencer again with the updated info
'var ChTitle$ := ChanTitle$(ChanToChk%); 'This requires a time view to run
var ChTitle$ := SampleTitle$(ChanToChk%); 'Use this because I check via config file BEFORE opening a time view
var seq% := FileOpen(SampleSequencer$(),2,0); 'open the running/selected sequencer
    'View(seq%);'Jump to the previously created sequencer/text view'
    if (seq% > 0) then     ' if we opened a file...
                    ReadSetup("\n"); 'line by line, hopefully no one fuck up the format
                    var line$; 'later add two for because I initiliaze or adjust array based on the length of the sequencer
                    MoveTo(0,0); 'Move to file start
                    var i% := 0;
                    var tempY$, OlDChLine$, NewChLine$;

                    while Read(line$) >= 0 do 'read until the lines are finished

                            if InStr(line$,"CHAN")>0 then 'Returns >0 if found, 0 if not
                                OlDChLine$:= line$; 'Keep oldChLine for edit and replace later
                                throaway% := InStr(line$,","); 'position of the comma, use the throaway var
                                'Find chan selected after comma
                                tempY$ := Mid$(line$,throaway%+1); 'y is the second part, so read the char after the comma to end
                                NewChLine$ := Replace$(line$,tempY$," " + Str$(ChanToChk%) + "  ;Read data of " + ChTitle$); '" space N_ch ;Title channel"
                                'FIND THE MATCHED STRING and REPLACE WITH NEW CHANNEL INFO
                                MoveTo(0,0,i%+1); 'Move to line above for replace forward because the cursor go to line next
                                EditFind(OlDChLine$, 1, 0); ' forward
                                EditReplace(OlDChLine$, NewChLine$, 0, 0); 'Backwards
                                MoveTo(0,0,i%+2); 'Skip last replace
                            endif
                            i% := i% +1;   'move to the next line
                    wend;
    endif;

    View(seq%);'‘Jump to the previously created sequencer/text view'
    FileSave(); 'Save updated Sequencer
    FileClose();
    'Re-run the newever updated sequencer DURING sampling
    SampleSequencer(4, SampleSequencer$()); '4 for replace running sequencer

    return 1;

end

'CHECK CHANNEL LIST "BEFORE" SEQUENCER EDIT AND SWITCH CHANNEL*************************************************************************
Func ChkList_Seq%()

    'Make a for loop starting from 1 to 100 (according to samplechaninfo up to 100).
    'as soon as outp = 1 (so it is a waveform), GET the channel port/info of this (maybe not necassary because the value of the for loop
    'is the channel number. Use this channel number for the sequencer update.
    'if index == 100 then print the message.
    var Outp%,ch_n%;

    for ch_n% := 1 to 100 do
           'Check each "channel" to see whether at least one waveform/adc exists
           Outp% := SampleChanInfo(ch_n%,0); 'ch_n% = channel number, 0 if it is ADC type or 1 to get its port. I need ADC because of checking the waveform type
           'PrintLog(Outp%);
           'PrintLog("\n");
           if Outp% = 1 then'4 = channel number, 0 if it is ADC type or 1 to get its port. I need ADC to check waveform.
                'PrintLog("Channel number is:");
                'PrintLog(ch_n%);
                SwitchChannel%(ch_n%);
                break;
            endif;
           'In case no waveform found maybe send a message
           if ch_n% = 100 then
                Message("No Wavefrom channel detected in the sampling configuration!\nPlease comment last part of the sequencer otherwise it crashes");
           endif
     next;

  return 1;
end;

'QUICK 1ms TAP for afterwards exporting (e.g., fatigue contraction)*************************************************************************

Func DAC1tap%()
  SampleKey("T");    '1ms single pulse square wave DAC1
  return 1;
end


''''''''''''' GET each process and value of each non virtual channel in the 3D matrix
''TO NOTE: It doesn't work when processes ask for 2 arguments (i.e., interpolation)
Func BackupChProcess%()

    'Init
    var list%[101];'nCh% := -1;'first element = to n channels
    ChanList(list%, 0x200000); 'copy all except for the virtuals
    var tmp% := 1;

    resize mat_ch_proc[][list%[0]][]; 'resize as many non virtual channels as in the time view
    ArrConst(mat_ch_proc[][][], 0);'reset EVERYTHING to ZEROs
    ArrSub(mat_ch_proc [1:20] [] [0],1); 'set all potential processes to -1 because process id = 0 is rectify, so I need an ID that is unique for identifying the end of applied process of a given ch

    var n_arg%;
    while tmp% <= 100 do

      if list%[tmp%] = 0 then 'if there is no more channel, then quit the while loop
          break
      else
        'list_cor%[tmp%-1] := list%[tmp%];
        'ChanProcessClear(list%[tmp%],0);
        mat_ch_proc[0][tmp%-1] [0] := list%[tmp%]; 'save the channel number in the first col and n line
        mat_ch_proc[0][tmp%-1] [1] := list%[tmp%]; 'save the channel number in the first col and n line

        'mat_val[0][tmp%-1] := list%[tmp%]; 'save the channel number in the first col and n line

        n_arg% := ChanProcessInfo(list%[tmp%]); 'return how many processes are added to the given channel
        'the first added process is one
        var i% := 1; 'first argument starts from 1

        'go through each channel argument and save the id of the process AND the value of it in the two matrixes
        for i% := 1 to n_arg% step 1 do

            'get id of the process
            mat_ch_proc[i%][tmp%-1] [0]:= ChanProcessInfo(list%[tmp%],i%); 'this return the process id number

            'get value of that id process at argument 1, I assume you can only have 1 argument/n for each process???!
            mat_ch_proc[i%][tmp%-1] [1] := ChanProcessArg(list%[tmp%],i%,1);
         next

        ChanProcessClear(list%[tmp%],0); 'remove all the operations from the current ch after saving its processes
        tmp% := tmp%+1;

      endif

    wend
    'return updated 3D matrix for reverse coding following saving
    return 1
end

''''''''''' REVERSE : Applying back the processes to the channels
Func ReApplyProc%()

    'get how many channels are collected
    var tmp% := Len(mat_ch_proc,1)-1;
    var i% := 1, j% := 1, n_ch%, id% , value;
    'For each channel, get the processes id and value, respectively'
    for i% := 0 to tmp% step 1 do 'as many steps as many channels
        n_ch% := mat_ch_proc [0][i%][0];'first position is the channel number
        '0 = channel number, from 1 the potential '
        for j% := 1 to 20 step 1 do 'as I assumed maximum 20 processes can be applied

            if mat_ch_proc[j%][i%][0] = -1 then 'if no process added at this channel (i.e., = -1), skip
                break;
            else
                id% := mat_ch_proc[j%][i%][0]; 'get id of the process
                value := mat_ch_proc[j%][i%][1]; 'get value of the process
                ChanProcessAdd(n_ch%,id%,value);
            endif
        next
    next

   return 1
end


'''''''''''''' CREATE POLY FIT 1st or 3rd GRADE between Angle and Torque channel to create virtual channel with active torque.
Func FitPassiveTorque%()

   Message("Be aware that the Isomed will be triggered FOUR times if you press OKAY in the next pop-up window.\nInstruct your participant to stay relaxed!");
    'Local vars
    var ch_Ang%, ch_Tor%, chk%, pOrd%, tmpOrd$;
    DlgCreate("Select the chane for active torque",0,0,60,8);
    DlgChan(1,"Select the Angle Channel (X)",0x40000);
    DlgChan(2,"Select the Torque Channel (Y)",0x40000);
    DlgList(3,"Select polyfit order","1|3");
    DlgLabel(4,"Be sure that in the next 17seconds (between Cursor(0) and Cursor(1)) \nthe participant stays relaxed while the rotations occur\nIf the torque is negative,just add a -(minus)\nin the expression of the virtual chan that will appear\n");

    DlgAllow(0x3ff,0);
    chk% := DlgShow(ch_Ang%, ch_Tor%, pOrd%, throaway%);  'Allow all, no idle, change function

    if (chk% = 0)then'if click cancel, simply exit
        return 1; 'break
    endif
'List returns an index so I need to correct then
    docase
        case pOrd% = 0 then pOrd% := 1;
        case pOrd% = 1 then pOrd% := 3;
    endcase


    Cursor(0, MaxTime()); 'set cursos 0 '
    CursorVisible(0,1);

    Yield(1.5); 'wait 1.5s'
    Isomed%(); 'move isomed first time'
    Yield(3); 'wait 3 second to rotation occur and some rest data in case(depends on ROM and velocity)'
    Isomed%();
    Yield(3); 'wait another 3'
    Isomed%();
    Yield(3); 'wait another 3'
    Isomed%();
    Yield(5); 'wait 5s to have potential baseline afterwards'
    CursorNew(MaxTime(),1);
    Cursor(1, MaxTime()); 'set cursor 1,
    'count points collected between the set cursors for pre-allocation
    const n_pt% := CountWave%(ch_Tor%,Cursor(0), Cursor(1)); 'N-pts to be determined via fucntion
    var Tor[n_pt%], Ang[n_pt%]; 'Real and integer wave, first time
    ChanData(ch_Tor%, Tor, Cursor(0), Cursor(1));   'Read data
    ChanData(ch_Ang%, Ang, Cursor(0), Cursor(1));   'Read data
    'Define fitting, in this case poly fit, 1st grade (i.e., linear)'
    var coefN% := FitData(2,pOrd%);'set fitting to poly fitting and the selected order
    var coeff_fit[coefN%]; 'pre allocation how many coeff'
    'var tmp :=
    FitData(1,Tor,Ang);'Fit the data according to the fitting chose, tmp := 0 --> fitting completed
    'get the coefficients in the correct order, I found out to be flipped
    for x% :=coefN%-1 to 0 step -1 do
        coeff_fit[coefN%-x%-1] := FitCoef(x%);
    next

    ''Create the virtual Channel based the coefficients (simple math of a y = f(x));
    var existsV% := Chan("v1");
    var ch1% := VirtualChan(0, ""); 'Create new virtual channel
    ChanShow(ch1%); 'Make it visible
    ChanTitle$(ch1%, "Active Torque");
    ChanUnits$(ch1%, "Nm");

    'FIRST PART OF EQUAL ALWAYS THE SAME'
    var strT$ := "Ch(" + Str$(ch_Tor%) + ") - ("; 'create strig channel "Torque - (" already the fit
    var strA$ := "Ch(" + Str$(ch_Ang%) + ")"; 'Create string channel "Angle"
    var expr_vChan$;
    if pOrd% = 1 then
      expr_vChan$ := "(" + strT$ + strA$ + "*" + Str$(coeff_fit[0]) + "+" + Str$(coeff_fit[1]) + "))"; 'first it's fast
    else 'third order I prefer to split to avoid too long text--> sometimes Spike2 doesn't allow long text for a variaible
      var fitStr$ := "Cub(" + strA$ + ")*" + Str$(coeff_fit[0]) + " + Sqr(" + strA$ + ")*" + Str$(coeff_fit[1]) + "+" + strA$ + "*" + Str$(coeff_fit[2]) + "+" + Str$(coeff_fit[3]);
      expr_vChan$ :=  "(" + strT$ + fitStr$ + "))"; 'add parentheses so easy to add a - in front of expression in case torque is negative
    endif
    'Create the channel according tot the equation'
    VirtualChan(ch1%, expr_vChan$, ch_Tor%);  'Match angle or torque channel interval? Torque
    Optimise(ch1%);
    return 1;
end


''' FUNCTION to count pts between two cursors in a given channel, necessary for pre-allocation
Func CountWave%(chan%, tFrom, tTo)
    if ViewKind() then return 0 endif;    'must be time view and wave
    if ChanKind(chan%)<>1 and ChanKind(chan%)<>9 then return 0 endif;
    const max% := 8000;
    var buffer[max%], n% := 0, nGot%;
    repeat
        nGot% := ChanData(chan%, buffer, tFrom, tTo, tFrom);
        if (nGot% <= 0) then return n% endif;
        n% += nGot%;
        tFrom += nGot% * BinSize(chan%);
    until 0;

    return 1;
end


''' FUNCTION to set time points for analysis
Func SetErrorWin%()
    'Local vars
    var chk%;
    DlgCreate("XY feedback error quantification");

    DlgGroup("Time points for error quantification ",1,1,80,3);
    DlgReal(2, "Time point 1 (s)",0.25, xywidth-0.25);'0.25s buffer
    DlgReal(3, "Time point 2 (s)",0.25, xywidth-0.25);
    DlgCheck(4,"Show table with output");
    DlgLabel(5,"A table/grid view will appear after saving(or not) each snippet with the error quantification!\nBy changing the time points the values are update for the given XY view\n");

    DlgAllow(0x3ff);', 0, GenerateTableError%); 'call every time the re-calculation for double checking error in different wins
    chk% := DlgShow(throaway%,time_pts_err, showGridVH%,throaway%);  'Allow all, no idle, change function

    if (chk% = 0)then'if click cancel, simply exit
        return 1; 'break
    endif

    GenerateTableError%(); 'RUN the generate table which contains the if checks if the windows should be showed or not

    return 1;
end

''' FUNCTION Generate Grid view, get data etc
func GenerateTableError%()

    if xyVH% <= 0  then ' if no XY is avaibble there can't be any fdbck ramp
            return 1;
    endif
    if gridVH% <= 0 then
        gridVH%:=FileNew(17, 3, 3, 7); 'Create Grid view
        WindowVisible(0); 'create the view but make it hidden for now
        View(gridVH%).Window(30, 35, 60, 65);
        GrdSet("Parameter", 0, 0); 'Set cell text
        GrdSet("Absolute units", 1, 0); 'Set cell text
        GrdSet("Relative units(%)", 2, 0); 'Set cell text
        'EditSelectAll();
        GrdSet("Relative units (%)", 2, 0); 'Set cell text
        GrdSet("Min error", 0, 1); 'Set cell text
        GrdSet("Max error", 0, 2); 'Set cell text
        GrdSet("|Max| error", 0, 3); 'Set cell text
        GrdSet("Mean error", 0, 4); 'Set cell text
        GrdSet("Standard deviation", 0, 5); 'Set cell text
        GrdSet("CoV", 0, 6); 'Set cell text
        MoveTo(0, 0, 0); 'New selection 
        GrdAlign(1, -1); 'Align selected columns
        FontSet("Arial",14, 0); 'set view font
        GrdColWidth(-2, -2); 'Optimise all column widths
            
    endif

    'Now get the data of the biodfdk uses for the ramp snippet and also the ideal ramp data
    View(xyVH%);'Set view to XY to get the data needed from the fdbch
  
    'It should start as channel one, but for some reason I check and is channel 2 the first
    'therefore fdbchannel is the number 4'
    var n_pt% := XYCount(4);
    if n_pt% = 0 then return 1; endif 'in case someone click / change something but no snippet ran
    '4 is fdbchannel, so init array to contain X and Y data of fdbch
    var x_fdk[n_pt%], y_fdk[n_pt%];
    XYGetData(4,x_fdk,y_fdk,0); 'get all data! cool, now I need to basically interpolate the mean/real channel
    ''PrintLog(x);
    'Double check which ramp was selected if ramp <= 1 its arrange 16 (8+8 xy) while the other have different amount
    'Ramp 2 and 4 can be different
    var size_half% := 0;
    var r_x[1], r_y[1], i% ;
    if rampnumber% = 0 then
        size_half% := Len(r1)/2;
        resize r_x[size_half%];
        resize r_y[size_half%];

        for i% := 0 to size_half% - 1 do
            r_x[i%] := r1[i% * 2];       ' Even indices: 0, 2, 4, 6, ...
            r_y[i%] := r1[i% * 2 + 1];   ' Odd indices:  1, 3, 5, 7, ...
        next
    
    endif
    if rampnumber% = 1 then
        size_half% := Len(r2)/2;
        resize r_x[size_half%];
        resize r_y[size_half%];

        for i% := 0 to size_half% - 1 do
            r_x[i%] := r2[i% * 2];       ' Even indices: 0, 2, 4, 6, ...
            r_y[i%] := r2[i% * 2 + 1];   ' Odd indices:  1, 3, 5, 7, ...
        next
    
    endif
    if rampnumber% = 2 or rampnumber% = 4 then
        resize r_x[Len(Import_rampX)];
        resize r_y[Len(Import_rampY)];
        ArrConst(r_x[], Import_rampX[]);
        ArrConst(r_y[], Import_rampY_scale[]);        
    endif
    'now we get everything, we need to interpolate the ramp pts to feedback ch pooitns according to the time (X)
    'I designed ArrayInterp1 because script wise Spike2 allows ONLY cubic or spline interpolation
    'This will be my interpolated ramp y values
    'var destX[dest_x_size%];
    var r_y_int[n_pt%];
    ' Run custom linear interpolation function
    ArrayInterp1(r_x, r_y, x_fdk, r_y_int);
    ' Print out results to debug log output
    'for i% := 0 to dest_x_size% - 1 do
    '    PrintLog("%f\t%f\t%f\n", destX[i%], destY[i%],fdbch[i%]);
    'next

    'Now findexes using absolute minum local, cut the data according to time point of interest and run shitty
    'duplicate array
    var tmp[Len(x_fdk)];
    ArrConst(tmp[], x_fdk[]);

    'find minimum absolute location 
    var ind_to_cut%[3];
    ArrSub(tmp,time_pts_err[0]);
    Abs(tmp);
    ind_to_cut%[0] := Min(tmp); 'example time point 4.5

    'Repeat for second poiint
    ArrConst(tmp[], x_fdk[]);
    ArrSub(tmp,time_pts_err[1]);
    Abs(tmp);
    ind_to_cut%[1] := Min(tmp); 'example time point 4.5
    ind_to_cut%[2] := ind_to_cut%[1] - ind_to_cut%[0] +1; 'when passing an array range you define start:size
    'PrintLog("BAU\n \n ");

    ErrCalculation(r_y_int[ind_to_cut%[0]:ind_to_cut%[2]],y_fdk[ind_to_cut%[0]:ind_to_cut%[2]]);
end




'replicate matlab interp1'
'X and Y input of the original channel, the X new indepdent to interpolate accordingly and the destY as output'
'no extrapolation'
func ArrayInterp1(srcX[], srcY[], destX[], destY[])

  'Get old and new size of the array to interpolate'
  var srcSize% := Len(srcX);
  var destSize% := Len(destX);

  'init some stuff'
  var d%, s%, x0, x1, y0, y1;

  for d% := 0 to destSize% -1 do
    'Case 1: extrapolation before first source point'
    if destX[d%]  <= srcX[0] then
      continue;
    endif

    'Case 2: extrapolation after last source point'
    if destX[d%]  >= srcX[srcSize% -1] then
      continue;
    endif

    'Case 3: within points, so check each new X location where is"
    for s% := 0 to srcSize% -2 do
      if destX[d%] >= srcX[s%] and destX[d%] <= srcX[s% +1] then
        'get points to calculate simple slope, I might use even the linear fitting between points but let's see
        x0 := srcX[s%];
        x1 := srcX[s% +1];
        y0 := srcY[s%];
        y1 := srcY[s% +1];

        'ignorance of linear interp formul'
        destY[d%] := y0 + (destX[d%] - x0) * (y1 - y0) / (x1 - x0);
        break; 'found, let's move on

      endif
    next
  next


  return 1; 'I think this is missing as output of the function, need to check'


end


'Function for error calculaiton 
'truth[], trial[] are two array same length which are used for error estimation etc
'gridHandle% is the GridView to parse the vars
func ErrCalculation(truth[],trial[])

    View(gridVH%);'set the view  
'    MoveTo(0, 1, 1); 'New selection 
'    MoveTo(1, 2, 6); 'Extend selection 
'    EditClear(); 'clear old result
    'First quick check to avoid crahses
    if Len(truth) <> Len(trial) then
        PrintLog("\nTruth and trial data are not same length!\n");
        return;
    endif

    'init vars of interest
    var ErrMinMax[6]; '4 because min and max, asbolyte and relative, 2 for asbolute max     
    var ErrMean[2];
    var ErrStd[2];
    var ErrVarian[2];
    var CVar[2];    'although relative of relative might be not the ebst
    'init an array for absolute difference and one for relative
    var ADiffAbs[Len(truth)];
    var ADiffRel[Len(truth)];
    var tmpAbs[Len(truth)][2]; 
    'abs diff
    ArrConst(ADiffAbs[], trial[]);
    ArrSub(ADiffAbs[],truth[]);
    ArrConst(tmpAbs[][0], ADiffAbs[]);

    'rel diff
    ArrConst(ADiffRel[], ADiffAbs[]);
    ArrDiv(ADiffRel[],truth[]);
    ArrConst(tmpAbs[][1], ADiffRel[]);
    ArrMul(tmpAbs[][1],100);
    'Do absolute so I can get absolute max
    Abs(tmpAbs);

    'now get location s
    var loc%[6]; 'need them
    'Get min and max location 
    loc%[0] := Min(ADiffAbs); '
    loc%[1] := Max(ADiffAbs); '
    loc%[2] := Min(ADiffRel); '
    loc%[3] := Max(ADiffRel); '

    loc%[4] := Max(tmpAbs[][0]); '
    loc%[5] := Max(tmpAbs[][1]); '

    'Populate now the array
    ErrMinMax[0] :=  ADiffAbs[loc%[0]];
    ErrMinMax[1] :=  ADiffAbs[loc%[1]];
    ErrMinMax[2] :=  ADiffRel[loc%[2]];
    ErrMinMax[3] :=  ADiffRel[loc%[3]];

    'PrintLog(tmpAbs[3][0]);
    ErrMinMax[4] :=  tmpAbs[loc%[4]][0]; 'qui c'è un problema
    ErrMinMax[5] :=  tmpAbs[loc%[5]][1];

    'Calculate now some stats

    'var useless
    var skewVal, kurVal;
    ArrStats(ADiffAbs, ErrMean[0], ErrVarian[0], skewVal, kurVal);
    ArrStats(ADiffRel, ErrMean[1], ErrVarian[1], skewVal, kurVal);
    
        ' std = sqrt of variance
        ErrStd[0] := Sqrt(ErrVarian[0]);
        ErrStd[1] := Sqrt(ErrVarian[1]);

    var i% := 0;
        for i% := 0 to 1 do
        ' Coefficient of variation (CV) = (Standard Deviation / Mean) * 100 [expressed as a %]
        if (ErrMean[i%] <> 0) then
            CVar[i%] := (ErrStd[i%] / ErrMean[i%]) * 100;
        else
             CVar[i%]  := 0;
        endif;
        
    next

    Abs(CVar);
    'Add to the Grid all the data now
    'text,Column num, Row number
    GrdSet(Str$(ErrMinMax[0]), 1, 1); 'Set cell text
    GrdSet(Str$(ErrMinMax[1]), 1, 2); 'Set cell text
    GrdSet(Str$(ErrMinMax[4]), 1, 3); 'Set cell text
   'relative
    GrdSet(Str$(ErrMinMax[2]), 2, 1); 'Set cell text
    GrdSet(Str$(ErrMinMax[3]), 2, 2); 'Set cell text
    GrdSet(Str$(ErrMinMax[5]), 2, 3); 'Set cell text

    'stats
    GrdSet(Str$(ErrMean[0]), 1, 4); 'Set cell text
    GrdSet(Str$(ErrMean[1]), 2, 4); 'Set cell text

    GrdSet(Str$(ErrStd[0]), 1, 5); 'Set cell text
    GrdSet(Str$(ErrStd[1]), 2, 5); 'Set cell text
    GrdSet(Str$(CVar[0]), 1, 6); 'Set cell text
    GrdSet(Str$(CVar[1]), 2, 6); 'Set cell text
    if showGridVH% = 1 then 'If people wants the Grid to be shown, then show it, otherwise just run in the background
        View(gridVH%);
        WindowVisible(2);
        Window(30, 35, 60, 65);
    else
        View(gridVH%);'set the view  
        WindowVisible(0);
    endif
    return 1;

end
